<?php
include ($template_directory . 'template_xml.php');
?> 

File_New
;

! ==================================
! Load files
! ==================================

! Load movement files and add tags.

<?
foreach($measurements as $m) {
	if(strstr($m["Used"], "True") && !strstr($m["Measurement_type"], "Static"))	{
		$path_parts = pathinfo($m["Filename"]);
?>

		File_Open 
		/FILE_NAME=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
		; 

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
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		/TAGS=<?=$m["Measurement_type"];?>
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
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		/TAGS=<?=$session['Test_condition'];?> 
		;

		Assign_Tags_To_Files
		/MOTION_FILE_NAMES=<?=$working_directory . $path_parts['filename'] . ".c3d";?> 
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		/TAGS=<?=$m['Comments'];?> 
		;

<?
	}
}?> 